PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Framing_HieuLe
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ButtonComponent button
      bold = True
      borderColor = black
      borderWidth = 1.2
      color = black
      forceEndRoutine = True
      letterHeight = 0.022
      pos = (-.2, -.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $Option1
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    ButtonComponent button_2
      bold = True
      borderColor = black
      borderWidth = 1.2
      color = black
      forceEndRoutine = True
      letterHeight = 0.022
      pos = (.2, -.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $Option2
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    TextComponent text
      color = black
      letterHeight = 0.04
      pos = (0, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ItemText
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    TextComponent text_2
      color = black
      letterHeight = 0.04
      pos = (0, .02)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
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  Routine code
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        conditions.finished = True
  Routine Welcome
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Framing task!

        Press spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        During this task you will be presented with a series of text and questions. Be sure to read properly and thoroughly, answer as soon as you have an answer in mind. If the buttons are not registering be sure to press in the squares to choose your answer.

        Press spacebar to continue to the task.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Goodbye
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Thank you for participating!

        This window will automatically close in a few seconds.
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator conditions loopType="TrialHandler"
    conditionsFile = lists.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'listName': 'framing1.xlsx'},
      {'listName': 'framing2.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $listName
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine code
  LoopTerminator conditions
  Routine Goodbye
